PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Data filename = 'data/%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'repetitions': [2, 3]}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = black
  expName = Stimulus repeated viewing
  frameRate = 60
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine wait_for_5
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    TextComponent waiting_message
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = waiting signal
      units = height
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    KeyboardComponent start_trigger
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine black_start
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    PolygonComponent black_start_screen
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      units = norm
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  Routine viewing
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    MovieComponent stimulus
      backend = ffpyplayer
      forceEndRoutine = True
      movie = $'stimulus_twice.mp4' if int(expInfo['repetitions']) == 2 else 'stimulus_three_times.mp4'
      size = (1.7777777778, 1)
      startVal [time (s)] = 0.0
      units = height
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  Routine black_end
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    PolygonComponent black_end_screen
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      units = norm
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Flow
  Routine wait_for_5
  Routine black_start
  Routine viewing
  Routine black_end
